\ MPC code for Tactile Aversion Choice (TAC) training and probably testing, tbd

\ **************************** Inputs ***************************
\ IR beams are numbered from left sipper to right sipper. Because
\ we are also recording licks, we will only record the three IR
\ beams closest to each sipper (middle two are dropped). Note
\ that on the Med Associates card, these inputs should be set to
\ level.
^IR_1  = 4
^IR_2  = 3
^IR_3  = 2
^IR_4  = 6
^IR_5 = 7
^IR_6 = 8
\ The licks are recorded for the matching sippers. Note that on
\ the Med Associates card, these inputs should be set to toggle.
^tacLick = 1
^barLick = 5
\ **************************** Outputs ***************************
^tacStimLight = 1                 \ The output number for the left stimulus light
^barStimLight = 2                \ The output number for the right stimulus light
^tacSipper = 5                    \ The output number for the left sipper when looking at the front of the chamber
^barSipper = 9                   \ The output number for the right sipper when looking at the front of the chamber
^PiSync = 7                        \ The output number for the sync signal to the raspberry Pi

\ *** List of variables and arrays ***

\  A = Timestamp for light on and PiSync "ON" times for choice trials
\  B = Counter
	B(0) = Total trial counter
	B(1) = Forced trial counter
\  C = List for intertrial interval (ITI) times
\  D = Variable selected for the ITIs each time
\  E = number of forced trials at the beginning
\  F = List for forced trial selection
\  G = Forced trial type (1 = TAC, 2 = Bar)
\  H = Timestamp for light on and PiSync "ON" times for forced trials
\  I = Counter for PiSync timestamp indexing
\  M = Time counter for increasing PiSync on time
\  T = session time, used for time stamping and clock

DIM A = 500
DIM H = 500

LIST C = 10", 22", 36", 50", 68"
LIST F = 1, 2


\  *******************************************************************
\        Set Up and Time Test Period(s)
\  *******************************************************************

S.S.1,

S1,

  #START: Z1, Z5 ---> S2 \trigger start of session with issue

S2,

  0.01": Set T = T + 0.01; IF B(0) = 40 [@End,@Continue] \set clock T in seconds and end session when B (trial counter) = 40
    @End: ---> S3
    @Continue: ---> S2
S3,

    0.5": ---> STOPABORTFLUSH

S.S.2,
S1,
#Z5:--->S2
S2,
0.01":IF B(1) = E [@TRUE,@FALSE]
	@TRUE: Z4 --->S1
	@FALSE: RANDD G = F; IF G = 1 [@TRUE,@FALSE]
		@TRUE: Z2 ---> S1
		@FALSE: Z3 --->S1
S.S.3,
S1,
#Z2: RANDD D = C --->S2
S2,
D#T: ON^tacStimLight, ^PiSync; ADD I; SET H(I) = T ---> S3
S3,
4": OFF^tacStimLight, ^PiSync ---> S4
S4,
1": ON^tacSipper ---> S5
S5,
6.5": OFF^tacSipper; Z5 ---> S1

S.S.4,
S1,
#Z2: RANDD D = C --->S2
S2,
D#T: ON^tacStimLight, ^PiSync; ADD I; SET H(I) = T ---> S3
S3,
4": OFF^tacStimLight, ^PiSync ---> S4
S4,
1": ON^tacSipper ---> S5
S5,
6.5": OFF^tacSipper; Z5 ---> S1
\********************
\PiSync signal
\************************

S.S.6,
S1,
    #Z1: Set M = 0.1" --->S2
S2,
    0.001": ON^PiSync; ADD I; SET H(I) = T --->S3
S3,
    M#T: SET M = M+0.1; OFF ^PiSync; SET A(I) = T ---> S4
S4,
    9.999": --->S2
